PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = cm
  Window size (pixels) = [1920, 1080]
  expName = para
  keyboardBackend = ioHub
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Routines
  Routine pre
    TextComponent text_pre_condition
      letterHeight = 4
      pos = (0, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $condition
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    TextComponent text_pre_fix
      letterHeight = 4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine trial
    TextComponent text_condition
      letterHeight = 4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $condition
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    CodeComponent code_trigger
      Code Type = Py
      Begin Routine:
        if condition == "feet":
             outlet.push_sample([1])
        elif condition == "hand":
             outlet.push_sample([2])
  Routine intro
    TextComponent text_intro
      letterHeight = 2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Wellcome!
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    CodeComponent code_init
      Code Type = Py
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet

        # Setup the LSL stream
        info = StreamInfo(name='GrazBCI', type='Markers', channel_count=1,
                          channel_format='int32', source_id='PsychopyMarkersID321654')
        # Initialize the LSL stream.
        outlet = StreamOutlet(info)
  Routine end
    TextComponent text_end
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = End!
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  Routine nothing
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine fix
    TextComponent text_cross
      letterHeight = 4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = lists/llist.csv
    loopType = fullRandom
    nReps = 30
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    conditions:
      [OrderedDict([('condition', 'feet')]),
      OrderedDict([('condition', 'hand')]),
      OrderedDict([('condition', 'feet')]),
      OrderedDict([('condition', 'hand')]),
      OrderedDict([('condition', 'feet')]),
      OrderedDict([('condition', 'hand')]),
      OrderedDict([('condition', 'feet')]),
      OrderedDict([('condition', 'hand')]),
      OrderedDict([('condition', 'feet')])]
    Routine fix
    Routine pre
    Routine trial
    Routine nothing
  LoopTerminator trials
  Routine end
